PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = stroop
  Screen = 1
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Routines
  Routine trial
    TextComponent targe
      color [set every repeat] = $colour
      text [set every repeat] = $word
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'r','b','g','y'
      startVal [time (s)] = 0.5
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  Routine thanks
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for participat this experminet

        (you have been in Group A)

        Jalalledin Taavoni
        Fall 2017 ES-Aarhus

        Press Enter
    KeyboardComponent thank
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to Stroop Test
        Remember, choose the Color of the text, ignoring the word.

        Instruction:
        r = red
        b = blue
        g = green
        y = yellow

        Press any key to continue ...
    KeyboardComponent instraction
      correctAns = $corrAns
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = groupAIF.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'colour': u'red', 'word': u'red', 'congruent': 1, 'corrAns': u'r'},
      {'colour': u'blue', 'word': u'red', 'congruent': 0, 'corrAns': u'r'},
      {'colour': u'red', 'word': u'red', 'congruent': 1, 'corrAns': u'r'},
      {'colour': u'red', 'word': u'red', 'congruent': 1, 'corrAns': u'r'},
      {'colour': u'red', 'word': u'blue', 'congruent': 0, 'corrAns': u'b'},
      {'colour': u'blue', 'word': u'blue', 'congruent': 1, 'corrAns': u'b'},
      {'colour': u'blue', 'word': u'blue', 'congruent': 1, 'corrAns': u'b'},
      {'colour': u'blue', 'word': u'blue', 'congruent': 1, 'corrAns': u'b'},
      {'colour': u'green', 'word': u'green', 'congruent': 1, 'corrAns': u'g'},
      {'colour': u'green', 'word': u'green', 'congruent': 1, 'corrAns': u'g'},
      {'colour': u'green', 'word': u'green', 'congruent': 1, 'corrAns': u'g'},
      {'colour': u'yellow', 'word': u'green', 'congruent': 0, 'corrAns': u'g'},
      {'colour': u'red', 'word': u'yellow', 'congruent': 0, 'corrAns': u'y'},
      {'colour': u'yellow', 'word': u'yellow', 'congruent': 1, 'corrAns': u'y'},
      {'colour': u'yellow', 'word': u'yellow', 'congruent': 1, 'corrAns': u'y'},
      {'colour': u'yellow', 'word': u'yellow', 'congruent': 1, 'corrAns': u'y'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
